PsychoPy2experiment version="3.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant ID'], expName, expInfo['date'])
  Experiment info = {'Participant ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = photon
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Routines
  Routine trial
    ImageComponent test
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent answer
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent background
      image = None
      startVal [time (s)] = 0.0
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  Routine instructions
    MouseComponent click
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent text
      image = /Dropbox/UCLA/SMT/images/instructions.png
      startVal [time (s)] = 0.0
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  Routine fixation
    ImageComponent cross
      image = /Dropbox/UCLA/SMT/images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    SoundComponent beep
      sound = A
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 0.25
      syncScreenRefresh = False
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  Routine thank_you
    TextComponent thanks
      letterHeight = 0.1
      pos = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you!
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  Routine confidence
    ImageComponent test_image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent background_2
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator retrieval_task loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine trial
    Routine confidence
  LoopTerminator retrieval_task
  Routine thank_you
